PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = pirateTrial
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Routines
  Routine studyTrial
    ImageComponent background
      image = piratetask
      size = (2, 2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $CorrAns
      forceEndRoutine = False
      startVal [time (s)] = 5.0
      storeCorrect = True
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        Lbluewin = "Lbluewin.bmp"

        Lbluelose = "Lbluelose.bmp"
        Rbluewin = "Rbluewin.bmp"
        Rbluelose = "Rbluelose.bmp"
        Lgreenwin = "Lgreenwin.bmp"
        Lgreenlose = "Lgreenlose.bmp"
        Rgreenwin = "Rgreenwin.bmp"
        Rgreenlose = "Rgreenlose.bmp"

        BG = 1

        if response.keys == 'left'

        if BG = 1

        imageVariable = Lbluewin + str(counter) + "Lbluewin.bmp"
        else

        if response.keys == 'right'
        imagevariable = Lbluelose + str(counter) + "Lbluelose.bmp"
        break
Flow
  Routine studyTrial
